/* UTILS FUNCTION FOR THE MAIN EXPERIMENT */


/* get_trial_number */

# This function read the file and increase a counter
# and return the trials number. This is used to read
# the same file later

sub
   int get_trial_number(string path, int ncond)
begin
	int ntrials = 0;
	input_file condfile = new input_file;
	condfile.open(path);
	condfile.set_delimiter(',');
	loop until condfile.end_of_file()
	begin
		loop int cond = 1 until cond > ncond
		begin
			condfile.get_line();
			cond = cond + 1;
		end;
		ntrials = ntrials + 1;
	end;
	condfile.close();
	return ntrials
end;

/* get_trial_2Darray */

# This function read the file and store each trial in a 2D array
# where the first element index the trial number and the second
# element index the condition.

sub
   array <string, 2> get_trial_2Darray(string path, int ncond, int ntrials)
begin
	input_file condfile = new input_file;
	condfile.open(path);
	condfile.set_delimiter(',');

	array <string> TRIALS[ntrials][ncond];

	loop int i = 1 until condfile.end_of_file()
		begin
		array <string> TEMP[0];
		loop int cond = 1 until cond > ncond
			begin
				TEMP.add(condfile.get_line());
				cond = cond + 1;
			end;
		TRIALS[i] = TEMP;
		i = i + 1;
	end;
	condfile.close();
	return TRIALS
end;

/* generate_trial_id */ # DEPRECATED

# This function create a simple array from 1 to ntrials
# for the trial randomization.

sub
	array <int, 1> generate_trial_id(int ntrials)
begin
	array <int> trial_id[0];
	loop int i = 1 until i > ntrials
	begin
		trial_id.add(i);
		i = i + 1;
	end;
	return trial_id
end;

/* generate_oris_array_probe */ # DEPRECATED

# This function create an array from to without a specific
# number. Used to create an array from which sample the probe
# orientation for change trials

sub
	array <int,1> generate_oris_array_probe(int from, int to, int trial_ori)
begin
	array <int> oris[0];
	loop int i = 1 until i > 7
	begin
		if (i != trial_ori) then
			oris.add(i);
		end;
		i = i + 1;
	end;
	return oris;
end;

/* generate_different_ori */ # DEPRECATED

# This function return a random number from to without
# without a specific number (used for the memory)
# (more easy and efficient that the previous version)

sub
	int generate_different_ori(int from, int to, int trial_ori)
begin
	int probe_ori = 0;
	loop int i = trial_ori until i != trial_ori
	begin
		i = random(from, to);
		probe_ori = i;
	end;
	return probe_ori;
end;

/* get_acc_event */

# This function is a simple wrapper for getting accuracy from a given event
# thanks to @maya

sub
	int get_acc_event(stimulus_data event_data)
begin
	int acc = 99;
	if event_data.type() == event_data.HIT then  # The stimulus was a target and was associated with a correct response. 
		acc = 1;
	elseif event_data.type() == event_data.INCORRECT then  # The stimulus was a target and was associated with an incorrect response. 
		acc = 0;
	end;
	return acc
end;

/* get_rt_event */

# This function is a simple wrapper for getting reactions times

sub
	int get_rt_event(stimulus_data event_data)
begin
	int rt = event_data.reaction_time();
	return rt
end;

/* get_cond_names */

# This function read a cond_names files where the columns
# names are located. Return an array with column names for
# writing the condition file

sub
   array <string, 1> get_cond_names(string path)
begin
	input_file condfile = new input_file;
	condfile.open(path);
	condfile.set_delimiter(',');
	array <string> cond_names[0];
	loop int i = 1 until condfile.end_of_file()
	begin
		cond_names.add(condfile.get_line());
	end;
	condfile.close();
	return cond_names
end;

/* get_cond_number */

# This function return the number of conditions wihtin a condition
# files. This is useful to automatize the reading process from the
# main file

sub
   int get_cond_number(string path)
begin
	input_file condfile = new input_file;
	condfile.open(path);
	condfile.set_delimiter(',');
	int ncond = 0;
	loop until condfile.end_of_file()
	begin
		condfile.get_line();
		ncond = ncond + 1;
	end;
	condfile.close();
	return ncond
end;

/* write_experiment_file */

# This function take several inputs and basically return the shuffled TRIALS vector
# that is used in a specific trial. This is useful to reconstruct some properties if
# missing

sub
   string write_experiment_file(string output_file_name, array <string,1>& cond_names, int ntrials, array <string,2>& TRIALS)
begin
	output_file out_expfile = new output_file;
	out_expfile.open(output_file_name);
	
	# Write header
	
	loop int col = 1 until col > cond_names.count()
	begin
		out_expfile.print(cond_names[col] + " ");
		col = col + 1;
	end;
	
	out_expfile.print("\n"); # new line
	
	# Write Conditions
	
	loop int i = 1 until i > ntrials
	begin
		loop int cond = 1 until cond > cond_names.count()
		begin
			out_expfile.print(TRIALS[i][cond] + " ");
			cond = cond + 1;
		end;
		out_expfile.print("\n");
		i = i + 1;
	end;
	out_expfile.close();
	string out = "done";
	return out
end;

# read_coordinates

sub
   array <int, 1> get_coordinates(string path)
begin
	input_file coordfile = new input_file;
	coordfile.open(path);
	coordfile.set_delimiter(',');
	array <int> coord[0];
	loop until coordfile.end_of_file()
	begin
		coord.add(int(coordfile.get_line()));
	end;
	coordfile.close();
	return coord
end;